PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Olfactometer
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine program_select
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    CodeComponent select_csv
      Code Type = Auto->JS
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      Before Experiment:
        import os
        from psychopy import gui
      Begin Routine:
        schedule_dir = "/home/tpmint/Documents/olfacto_ros2/scripts/programs"  # Folder where your CSV files are
        files = [f for f in os.listdir(schedule_dir) if f.endswith(".csv")]

        # Show a dialog with list of files
        dlg = gui.Dlg(title="Choose Schedule")
        dlg.addField('Schedule:', choices=files)
        if dlg.show() is None:
            core.quit()

        selected_file = os.path.join(schedule_dir, dlg.data[0])
        # Save for use in the next routine
        thisExp.addData('SelectedSchedule', dlg.data[0])
  Routine wait_for_trigger
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    KeyboardComponent mri_trigger
      allowedKeys = 'y','5','t'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if mri_trigger.keys:
            print("TRIGGER RECEIVED!")
  Routine run_program
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    CodeComponent Program
      Code Type = Auto->JS
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      Begin Routine:
        import csv, requests

        print("run_program routine started")
        pi_address = "http://olfactopi.local:8000/stimulus"

        try:
            with open(selected_file, newline='') as csvfile:
                reader = csv.DictReader(csvfile)
                for row in reader:
                    valve = int(row['Valve'])
                    ratio = float(row['ratio'])
                    duration = float(row['duration'])
                    total_flow = float(row['total_flow'])

                    payload = {
                        "valve": valve,
                        "ratio": ratio,
                        "duration": duration,
                        "total_flow": total_flow
                    }

                    print(f"Sending: {payload}")
                    response = requests.post(pi_address, json=payload)
                    core.wait(duration)
        except Exception as e:
            print(f"Error running odor schedule: {e}")
Flow
  Routine program_select
  Routine wait_for_trigger
  Routine run_program
